<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>1</cv:X>
            <cv:Y>190</cv:Y>
            <cv:Width>622</cv:Width>
            <cv:Height>206</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertColor">
                <cv:Conversion>Bgr2Hsv</cv:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:HsvThreshold">
                <cv:Lower>
                  <cv:Val0>163</cv:Val0>
                  <cv:Val1>72</cv:Val1>
                  <cv:Val2>15</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Lower>
                <cv:Upper>
                  <cv:Val0>179</cv:Val0>
                  <cv:Val1>255</cv:Val1>
                  <cv:Val2>94</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea xsi:nil="true" />
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Centroid" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="cv:Crop,p1:Rect">
        <MemberName>RegionOfInterest</MemberName>
        <Value>
          <X>9</X>
          <Y>15</Y>
          <Width>160</Width>
          <Height>176</Height>
        </Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ContainsPoint" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>